PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [800, 800]
  expName = V1
  keyboardBackend = ioHub
  logging level = warning
  measureFrameRate = False
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random () > 0.5: # 50:50 probability
            direction = -level
            corr_resp = 'left'
        else:
            direction = level
            corr_resp = 'right'
      End Routine:
        thisExp.addData('corrAns', corr_resp)
        thisExp.addData('tilt', direction)
        thisExp.addData('key_resp.corr', key_resp.corr)
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    GratingComponent grating
      contrast = 0.3
      mask = gauss
      ori [set every repeat] = direction
      sf = 8
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.3
      storeCorrect = True
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  Routine Ins
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    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Press left for left and right for right and press space to start
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thnx
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for participating
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  Routine Fixation
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    PolygonComponent Fix
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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Flow
  Routine Ins
  LoopInitiator Stair loopType="StairHandler"
    N down = 3
    N up = 1
    loopType = staircase
    max value = 20
    min value = 1
    nReps = 100
    start value = 10
    step sizes = [2, 1, 1, 0.5]
    step type = lin
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    Routine trial
  LoopTerminator Stair
  Routine Thnx
