PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [800, 600]
  expName = V2
  frameRateMsg = Kindly Wait
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:
            tilt = int(randint(-5,5))
            corrAns = 'down'
      End Routine:
        trials.addData('tilt',tilt)

        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:
            tilt = int(randint(-5,5))
            corrAns= 'down'
    PolygonComponent Fixation
      fillColor = white
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
      units = pix
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    GratingComponent grating
      contrast = 0.3
      mask = gauss
      ori [set every repeat] = tilt
      saveStartStop = False
      sf = 5
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'up', 'down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine Ins
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press up for no tilt and down for tilt
        Press SPACE to start
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thanks
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = Thank you for participating
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Flow
  Routine Ins
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
  LoopTerminator trials
  Routine Thanks
