PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1440, 900]
  expName = v4
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent line1
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line3
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line4
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probe
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine Ins
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press the following keys for the following positions:

        Numbers go from left to right

        Z - 1st line
        X - 2nd line
        C - 3rd line
        V - 4th line

        Press SPACE to start
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thnx
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Thank you for Participating!
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Flow
  Routine Ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = seq_cond.xlsx
    loopType = sequential
    nReps = 50
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    conditions:
      [{'pos': -150, 'corr_resp': 'z'},
      {'pos': -50, 'corr_resp': 'x'},
      {'pos': 50, 'corr_resp': 'c'},
      {'pos': 150, 'corr_resp': 'v'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = seq_cond.xlsx
    loopType = fullRandom
    nReps = 50
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    conditions:
      [{'pos': -150, 'corr_resp': 'z'},
      {'pos': -50, 'corr_resp': 'x'},
      {'pos': 50, 'corr_resp': 'c'},
      {'pos': 150, 'corr_resp': 'v'}]
    Routine trial
  LoopTerminator trials_2
  Routine thnx
