PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  expName = v5
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent testword
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine ins
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The experiment contains 2 phases.

        In the first phase; a word will be shown with a scale ranging from "familiar" to "unfamiliar", and you have to click on the scale how familiar or unfamiliar the word is to you.

        The second phase will involve you typing words or filling in the blanks for some words that have letters missing, type the full word and click submit

        Press SPACE to start
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Phase1
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Phase 1
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  Routine Phase_2
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Phase 2
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  Routine thanks
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    TextComponent thank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Thank you for participating!
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Flow
  Routine ins
  Routine Phase1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = studyword.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('study_word', 'Book ')]),
      OrderedDict([('study_word', 'Cushion ')]),
      OrderedDict([('study_word', 'Phone ')]),
      OrderedDict([('study_word', 'Marble ')]),
      OrderedDict([('study_word', 'Board ')]),
      OrderedDict([('study_word', 'Laptop ')]),
      OrderedDict([('study_word', 'Chart')]),
      OrderedDict([('study_word', 'T-shirt')]),
      OrderedDict([('study_word', 'mouse')]),
      OrderedDict([('study_word', 'Pastry')]),
      OrderedDict([('study_word', 'Case')]),
      OrderedDict([('study_word', 'Cruise')]),
      OrderedDict([('study_word', 'Police')]),
      OrderedDict([('study_word', 'Keys')]),
      OrderedDict([('study_word', 'Poster')])]
    Routine trial
  LoopTerminator trials
  Routine Phase_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = testword.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test_word', 'l_pt_p '), ('reference', 'laptop '), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ha_t '), ('reference', 'chart'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'T_hi_t '), ('reference', 'tshirt'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_o_se '), ('reference', 'mouse'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_a_tr_'), ('reference', 'pastry '), ('old_new', 'old')]),
      OrderedDict([('test_word', 'C_s_ '), ('reference', 'case'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_r_is_ '), ('reference', 'cruise '), ('old_new', 'old')]),
      OrderedDict([('test_word', 'P_li_e'), ('reference', 'police'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'K_y_ '), ('reference', 'keys'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'P_st_r'), ('reference', 'poster'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_o_rd '), ('reference', 'board'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_a_bl_'), ('reference', 'marble'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ho_e'), ('reference', 'phone'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_oo_'), ('reference', 'book '), ('old_new', 'old')]),
      OrderedDict([('test_word', 'c_s_io_'), ('reference', 'cushion'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'ta_l_ '), ('reference', 'table '), ('old_new', 'new')]),
      OrderedDict([('test_word', 'p_nc_l'), ('reference', 'pencil'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'v_s_'), ('reference', 'vase '), ('old_new', 'new')])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
    Routine test
  LoopTerminator trials_2
  Routine thanks
