PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  expName = v5
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon
      fillColor = green
      lineColor = green
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine BeepSound
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    SoundComponent Sound_1
      sound [set every repeat] = $freq
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
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  Routine Responses
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Report the delay between the key press and the beep sound (0-999).
        Click SUBMIT after entering the value
    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Type Here
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = SUBMIT
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  Routine Thanks
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Thank you for participating!
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    isTrials = False
    loopType = random
    nReps = 33
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    conditions:
      [OrderedDict([('delay', 0.1), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.4), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.7), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.1), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.4), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.7), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.1), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.4), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.7), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.1), ('freq', 400), ('condition', 'exp')])]
    Routine Trial
    Routine BeepSound
    Routine Responses
  LoopTerminator trials
  Routine Thanks
