PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = v7
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine Ins
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        2 values will be given to the participant with a choice, the participant has to press the key 't' for the value being offered 'today' or 'l' if the value they select is being offered at a later date.

        Press SPACE to start
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Thank you for participating!
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Flow
  Routine Ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition.csv
    loopType = random
    nReps = 14
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    conditions:
      [OrderedDict([('reward_today', 11), ('future_reward', 30), ('delay', 7)]),
      OrderedDict([('reward_today', 15), ('future_reward', 35), ('delay', 13)]),
      OrderedDict([('reward_today', 27), ('future_reward', 50), ('delay', 21)]),
      OrderedDict([('reward_today', 40), ('future_reward', 55), ('delay', 62)]),
      OrderedDict([('reward_today', 49), ('future_reward', 60), ('delay', 89)]),
      OrderedDict([('reward_today', 67), ('future_reward', 75), ('delay', 119)]),
      OrderedDict([('reward_today', 78), ('future_reward', 80), ('delay', 162)])]
    Routine trial
  LoopTerminator trials
  Routine thanks
