PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = soloproject
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine original
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    PolygonComponent fixation1
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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    ImageComponent image1
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = $duration
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  Routine mixed
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    PolygonComponent fixation2
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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    ImageComponent image_2
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = $duration
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      correctAns = CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        PHASE 1

        You will be shown a combination of black-and-white and coloured pictures, for different durations kindly observe them.

        Press SPACE to start
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        PHASE 2

        In this phase, you must press the 'y' key for yes - if you see a picture you have seen in the previous phase, and press the 'n' key for no if you have not.

        Press SPACE to start
    KeyboardComponent keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Thank you for your participation! Your response has been recorded. 
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = origialconditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('image', '/Users/mac/Desktop/0_Solo/flowerc6.jpg'), ('type', 'colour'), ('duration', 0.8)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/landscapebw5.jpg'), ('type', 'bnw'), ('duration', 0.533)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/rockc4.jpg'), ('type', 'colour'), ('duration', 0.05)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/mmc3.jpg'), ('type', 'colour'), ('duration', 1.067)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/flowerc2.jpg'), ('type', 'colour'), ('duration', 0.4)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/flowerbw4.jpg'), ('type', 'bnw'), ('duration', 0.2)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/landscapec3.jpg'), ('type', 'colour'), ('duration', 0.533)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/mmbw2.jpg'), ('type', 'bnw'), ('duration', 0.05)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/rockbw6.jpg'), ('type', 'bnw'), ('duration', 0.4)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/mmc6.jpg'), ('type', 'colour'), ('duration', 1.067)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/landscapebw2.jpg'), ('type', 'bnw'), ('duration', 0.8)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/flowerc5.jpg'), ('type', 'colour'), ('duration', 0.2)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/rockbw1.jpg'), ('type', 'bnw'), ('duration', 0.4)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/mmc1.jpg'), ('type', 'colour'), ('duration', 1.067)])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
    Routine original
  LoopTerminator trials
  Routine instructions2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = mixedconditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('image', '/Users/mac/Desktop/0_Solo/rockcn5.jpg'), ('corr_ans', 'n'), ('duration', 0.05)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/flowerc3.jpg'), ('corr_ans', 'y'), ('duration', 1.067)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/rockcn4.jpg'), ('corr_ans', 'n'), ('duration', 0.533)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/landscapebw4.jpg'), ('corr_ans', 'y'), ('duration', 0.4)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/flowerbwn3.jpg'), ('corr_ans', 'n'), ('duration', 0.2)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/rockc3.jpg'), ('corr_ans', 'y'), ('duration', 0.8)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/mmbw1.jpg'), ('corr_ans', 'y'), ('duration', 0.533)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/mmbw2.jpg'), ('corr_ans', 'y'), ('duration', 0.2)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/mmc5.jpg'), ('corr_ans', 'y'), ('duration', 0.8)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/landscapebwn5.jpg'), ('corr_ans', 'n'), ('duration', 1.067)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/landscapebwn1.jpg'), ('corr_ans', 'n'), ('duration', 0.05)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/landscapebwn4.jpg'), ('corr_ans', 'n'), ('duration', 0.4)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/flowerbw5.jpg'), ('corr_ans', 'y'), ('duration', 0.4)]),
      OrderedDict([('image', '/Users/mac/Desktop/0_Solo/mmcn1.jpg'), ('corr_ans', 'n'), ('duration', 0.05)])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
    Routine mixed
  LoopTerminator trials_2
  Routine thanks
